## ------ COUNTERBALANCE TRIALS THAT ARE IN EACH CONDITION ACROSS PARTICIPANTS ------ ##
# See Line68

# define parameters to view during experiment
parameter_window.remove_all();
int trial_parameter = parameter_window.add_parameter( "trial number" );
int type_parameter = parameter_window.add_parameter( "condition" );
int totaltrial_parameter = parameter_window.add_parameter( "total trials" );

int status_parameter = parameter_window.add_parameter( "on break" );
int wordscore = parameter_window.add_parameter( "Words Score" );

# Set-up conditions and trials
int num_uniq_trials = 205;
int trials_per_cond = 307;
int num_conds = 2;
int num_reps = 3;

int total_trials = trials_per_cond*num_conds+1; # +1 so that number of total_trials is divisable by num_reps

array<int> trial_order[total_trials];
array<int> cond_order[total_trials];
array<int> vid_order[total_trials];

array<int> block[num_reps];
array<int> cond[num_conds];
array<int> shuffle_order[num_reps];
shuffle_order.fill(1,num_reps,1,1); #start_index, end_index, start_value, value_step 

parameter_window.set_parameter(totaltrial_parameter, string(total_trials));

#Generate array of stimuli names
array <string> start_pics[total_trials];
array <string> videos[total_trials];
array <string> end_pics[total_trials];

loop int i = 1 until i >= total_trials begin
	
		start_pics[i] = "crosshair.png";
		end_pics[i] = "crosshair.png";
		
		if i >= 1  && i <= num_uniq_trials then
			videos[i] = "s" + string(i) + "_face_audio" + string(i) + string(i+1) + string(i+2) + ".avi";			
		elseif i > num_uniq_trials  && i <= 2*num_uniq_trials then
			videos[i] = "s" + string(i-num_uniq_trials) + "_face_audio" + string(i-num_uniq_trials) + string(i+1-num_uniq_trials) + string(i+2-num_uniq_trials) + ".avi";					
		else
			videos[i] = "s" + string(i-2*num_uniq_trials) + "_face_audio" + string(i-2*num_uniq_trials) + string(i+1-2*num_uniq_trials) + string(i+2-2*num_uniq_trials) + ".avi";
		end;
	i = i + 1;
end;

# randomise trials within block to ensure repetitions are at least 'trials_per_cond' mins apart
loop int i = 1 until i > num_uniq_trials begin
	
	# loop for each condition
	loop int j=1 until j>num_reps begin		
		block[j] = i + (j-1)*num_uniq_trials;
		j=j+1;
	end;		
	shuffle_order.shuffle(); 
	
	loop int j=1 until j>num_reps begin
	
		int idx = i + (j-1)*num_uniq_trials;
		
		trial_order[idx] = block[shuffle_order[j]];

		# NB counterbalance this across subjects!!
		if trial_order[idx] > total_trials/2 then
			cond_order[idx] = 2;
		else
			cond_order[idx] = 1;
		end;	
		
		if i <= num_uniq_trials then
			vid_order[idx] = i;
		elseif i > num_uniq_trials && i <= 2*num_uniq_trials then
			vid_order[idx] = i-num_uniq_trials;
		else
			vid_order[idx] = i-2*num_uniq_trials;
		end;
		
		j=j+1;
	end;
	
	i = i + 1;
end; 


array<int> behav_vids[num_uniq_trials]; # array with values 1-num_uniq_trials
behav_vids.fill(1,num_uniq_trials,1,1);

array<int> first_shuffle[num_uniq_trials]; 
first_shuffle.fill(1,num_uniq_trials,1,1);

array<int> behav_trials[total_trials]; # where to store the trial nums on which we will ask behavior
behav_trials.fill(1,total_trials,0,0); #start_index, end_index, start_value, value_step 

# shuffle video numbers
first_shuffle.shuffle();

loop int i=1 until i>90 begin	
	
	if i < 31 then
		behav_trials[first_shuffle[i]] = 1; 
	elseif i > 30 && i<61 then
		behav_trials[first_shuffle[i]+num_uniq_trials] = 1;
	else
		behav_trials[first_shuffle[i]+2*num_uniq_trials] = 1; 	
	end;

	i=i+1;
end;

#Read in words for intelligiblity test
int num_words = 5; # per trial
array <int> words_order[num_uniq_trials];

loop int i = 1 until i > num_uniq_trials begin
	words_order[i] = i; 
	i = i + 1;
end;

#Output trial order
output_file out1 = new output_file; 
out1.open( logfile.subject() + "-trial_order.txt" ); 
out1.print( "Run\tTrial\tCond\tVid\tBehav\n" ); 

loop int i = 1 until i > total_trials begin
	out1.print(string(i) + "\t" + string(trial_order[i]) + "\t" + string(cond_order[i])  + "\t" + string(vid_order[i]) + "\t" + string(behav_trials[i]) + "\n"); 
	i = i + 1;
end;
out1.close();

#Output subjects score for intelligibility rating
output_file out2 = new output_file;
out2.open( logfile.subject() + "-behav_score.txt" ); 
out2.print( "Run\tTrial\tWords\n" );

output_file out3 = new output_file;
out3.open( logfile.subject() + "-typed_words.txt" ); 

#Define trial variables
int run;

#---------------------------------START EXPERIMENT-------------------------------------------#
begin_trl.present();

#Loop through all trials
loop int i = 1 until i > total_trials begin
	
	parameter_window.set_parameter(trial_parameter, string(i));
	
	#Define trial and target index
	run = trial_order[i];

	int word = words_order[i];
	array<string> true_words[num_words];
	
	if behav_trials[i] == 1 then
	
		# load words for this trial - if its a behavior trial
		input_file wrds = new input_file; 
		wrds.open( "E://Aisling//Test driver//keywords//keywords_" + string(word) + ".txt" ); 
		wrds.set_delimiter( '\t' ); 
		loop int j = 1	until j > num_words begin
		
			string curr_word = wrds.get_string();
			words4pic[j].set_caption( curr_word );
			words4pic[j].redraw();
			true_words[j]=curr_word;
			
			#term.print(true_words[j]);
			
			j = j + 1;
		end;
		wrds.close();
	end;
	

#************************************************************************************************
	
	#Initialise pictures and videos for trial
	intro_txt.set_caption( "Trials remaining: " + string(total_trials-i+1) + "\n\n\nPress Spacebar to Continue to the next trial" );
	intro_txt.redraw();
	default_start_pic.set_filename( start_pics[run] ); default_start_pic.load();
	vid.set_filename( videos[run] );
	# set location of video based on condition 
	if run > total_trials/num_conds then
		vid.set_x(600); # put video on right
	end;
	
	stim_event.set_event_code( string(run) );
	# use modulus so never send port code greater than 95 	 
	stim_event.set_port_code( mod(trial_order[i], 95)  );
	
	default_end_pic.set_filename( end_pics[run] ); default_end_pic.load();
	vid.prepare();
	
	parameter_window.set_parameter(status_parameter, "Break");
	#Present trials
	intro_trial.present();
	
	parameter_window.set_parameter(status_parameter, "Cue");
	start_trial.present();
	
	et_start_trig.present();
	
	parameter_window.set_parameter(status_parameter, "Trial");
	stim_trial.present();
	vid.release();
	
	et_end_trig.present();
	
	stop_trial.present();

	parameter_window.set_parameter(status_parameter, "Break");
	vid.set_x(-600); # return video to default position 
#****************************************************************************************

if behav_trials[i] == 1 then
	#Use get input and show what was typed after pressing enter
	instruc_text.set_caption( "Type each word you heard in the previous trial \n\n Press Enter when done" );
	instruc_text.redraw();
	instruc_pic.present();

	# Enter is the default deliminator
	system_keyboard.set_case_mode( system_keyboard.CASE_UPPER );
	system_keyboard.set_max_length( 1 );
	string caption = "";
	int last_backspace_count = response_manager.total_response_count(1);

	system_keyboard.set_time_out(10);

	loop until false begin
		
		 bool do_set_caption = false;
		
		 string input = system_keyboard.get_input();
		 if input.count() > 0 then
			  caption.append( input );
			  do_set_caption = true;
		 end;

		 # check for backspace
		 int back_count = response_manager.total_response_count(1) - last_backspace_count;
		 if back_count > 0 then
			  int caption_size = caption.count() - back_count;
			  if caption_size < 0 then
					caption_size = 0;
			  end;
			  caption.resize( caption_size );
			  do_set_caption = true;
			  last_backspace_count = last_backspace_count + back_count;
		 end;

		 # if there were changes to caption, update txt1 and present the picture
		 if do_set_caption then
			  if caption.count() > 0 then
					response_text.set_caption( caption );
			  else
					response_text.set_caption( " " );
			  end;
			  response_text.redraw();
			  pic1.present();
		 end;
		
		if system_keyboard.last_input_type() == keyboard_delimiter then
			break
		end;
		
	end;

	out3.print( caption + "\n");
	#term.print(caption + "\n"); 

	int num_w_correct=0;
	int num_typed_words = 1; # accounting for the fact that there is no spacebar after the last word
	int start_val=2;
	string curr_char="";
	string typed_word="";

	if caption[1] == 00	then
		# no entry	
	else	
		loop int w=start_val until w>caption.count() begin

				if w==start_val && caption[w] != 32 then	# special case for beginning
					#term.print(string(1)+ "\n");
					curr_char=caption.substring(1,1); # substring( int index, int length ) 
					typed_word.append(curr_char);
				end;

				if w==caption.count() && caption[w] != 32 then	# special case for end (if there is no space)
					curr_char=caption.substring(w,1);
					typed_word.append(curr_char);
					loop int j=1 until j > num_words begin
						
						string true_word = true_words[j];

						if (true_word == typed_word) then
							num_w_correct=num_w_correct+1;
							typed_word="";
							break
						end;
						j=j+1;
					end;
					typed_word="";
				end;

				if caption[w] == 32 && caption[w-1] != 32 then # ascii character value for space is 32
					# compare word with true word and clear tmp word
					num_typed_words = num_typed_words+1;

					loop int j=1 until j > num_words begin						
						string true_word = true_words[j];
						
						#term.print(typed_word + "\n");
						#term.print(true_word + "\n");
						
						if (true_word == typed_word) then
							num_w_correct=num_w_correct+1;
							typed_word="";
							break
						end;
						j=j+1;
					end;
					typed_word="";
				elseif caption[w] != 32 then
					# read characters into string
					curr_char=caption.substring(w,1);
					typed_word.append(curr_char);
					
				end;
				w=w+1;
		end;
		term.print(string(num_typed_words)+ "\n"); 
		
	end;
	term.print(string( num_w_correct)+ "\n");
	int words_score=0;
	
	#int percent_correct = (num_w_correct/5)*100;	
	
	finish_txt.set_caption("You got " + string(num_w_correct) + "/5 words correct.\n\nPress spacebar to continue");
	finish_txt.redraw();
	finish_trial.present();
	
	#Output subjects score
	out2.print( string(i) + "\t" + string(trial_order[i]) + "\t" + caption + "\n" );
end;
		
	#Present finish trial at end
	if i == total_trials then
		finish_txt.set_caption( "You are finished.\nThank you." );
		finish_txt.redraw ();
		finish_trial.present();
	end;
	
	i = i + 1;
	
end;
out2.close();